PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = AOC
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = trk-encoding
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Routines
  Routine trials_run_1
    ImageComponent main_image
      image [set every repeat] = $TripletMemberA
      pos [set every repeat] = (Xcoordinate,Ycoordinate)
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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Flow
  LoopInitiator run_1 loopType="TrialHandler"
    Selected rows = 0:83
    conditionsFile = encoding_table.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('StimType', 'OLP'), ('Order', 1), ('Delay', 3), ('ScannerRun', 1), ('TripletMemberA', 'Stimuli/Fractals/118a.jpg'), ('TripletMemberB', 'Stimuli/Fractals/118c.jpg'), ('TripletMemberC', 'Stimuli/Fractals/118b.jpg'), ('Xcoordinate', 212.1320344), ('Ycoordinate', 212.1320344), ('Xcoordinate_lure1', 0.0), ('Ycoordinate_lure1', 300.0), ('Xcoordinate_lure2', 300.0), ('Ycoordinate_lure2', 0.0), ('Xcoordinate_foil', -212.1320344), ('Ycoordinate_foil', -212.1320344)]),
      OrderedDict([('TrialIndex', 2), ('StimType', 'OLP'), ('Order', 1), ('Delay', 3), ('ScannerRun', 1), ('TripletMemberA', 'Stimuli/Fractals/119c.jpg'), ('TripletMemberB', 'Stimuli/Fractals/119a.jpg'), ('TripletMemberC', 'Stimuli/Fractals/119b.jpg'), ('Xcoordinate', 212.1320344), ('Ycoordinate', -212.1320344), ('Xcoordinate_lure1', 0.0), ('Ycoordinate_lure1', -300.0), ('Xcoordinate_lure2', 300.0), ('Ycoordinate_lure2', 0.0), ('Xcoordinate_foil', -212.1320344), ('Ycoordinate_foil', 212.1320344)]),
      OrderedDict([('TrialIndex', 3), ('StimType', 'LLP'), ('Order', 1), ('Delay', 5), ('ScannerRun', 1), ('TripletMemberA', 'Stimuli/Fractals/135b.jpg'), ('TripletMemberB', 'Stimuli/Fractals/135a.jpg'), ('TripletMemberC', 'Stimuli/Fractals/135c.jpg'), ('Xcoordinate', 212.1320344), ('Ycoordinate', 212.1320344), ('Xcoordinate_lure1', 300.0), ('Ycoordinate_lure1', 0.0), ('Xcoordinate_lure2', 0.0), ('Ycoordinate_lure2', 300.0), ('Xcoordinate_foil', -212.1320344), ('Ycoordinate_foil', -212.1320344)]),
      OrderedDict([('TrialIndex', 4), ('StimType', 'ERP'), ('Order', 1), ('Delay', 2), ('ScannerRun', 1), ('TripletMemberA', 'Stimuli/Fractals/13a.jpg'), ('TripletMemberB', 'Stimuli/Fractals/13b.jpg'), ('TripletMemberC', 'Stimuli/Fractals/13c.jpg'), ('Xcoordinate', 212.1320344), ('Ycoordinate', -212.1320344), ('Xcoordinate_lure1', 300.0), ('Ycoordinate_lure1', 0.0), ('Xcoordinate_lure2', 0.0), ('Ycoordinate_lure2', -300.0), ('Xcoordinate_foil', -300.0), ('Ycoordinate_foil', 0.0)])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
    Routine trials_run_1
  LoopTerminator run_1
